PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = lastdayclasses
  keyboardBackend = ioHub
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Routines
  Routine trial
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent intro_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Type 'p' or 'e' for it being in the center and ignore the letters around it
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  Routine reactiontime
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    PolygonComponent Fixation
      fillColor = white
      shape = star
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent question
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $stimuli
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    KeyboardComponent key_resp_2
      allowedKeys = 'p','e'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'stimuli': 'VVPVV', 'corr_resp': 'p', 'response': 'incon'},
      {'stimuli': 'RRERR', 'corr_resp': 'e', 'response': 'incon'},
      {'stimuli': 'RRPRR', 'corr_resp': 'p', 'response': 'incon'},
      {'stimuli': 'VVEVV', 'corr_resp': 'e', 'response': 'incon'},
      {'stimuli': 'PPPPP', 'corr_resp': 'p', 'response': 'con'},
      {'stimuli': 'EEEEE', 'corr_resp': 'e', 'response': 'con'}]
    Routine reactiontime
  LoopTerminator trials
